PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[0,0,0]
  colorSpace = hsv
  expName = KTT
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Routines
  Routine Practice_Intro
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During this task, you will see words drawn from 6 possible categories:

        Animals: Zebra, Whale, Bear
        Colors: Blue, Red, Yellow
        Countries: Canada, Germany
        Distances: Miles, Inches
        Metals: Aluminum, Iron
        Relatives: Aunt, Father, Daughter
    TextComponent prac_intro_cont
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE for more instructions.
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  Routine Practice_Intro_2
    TextComponent prac_intro_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will see the words presented one at a time in the center of the screen. After all the words have been presented, write down the LAST word from each of the categories.

        The categories will remain at the bottom of the screen to help you remember.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent prac_intr_cont
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin practice.
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  Routine Intro_to_Full_Task
    TextComponent full_intro_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Did you write down Miles, Iron, and Aunt?

        If so, good work!
        If not, that's okay, keep trying.

        Now we will do a few more.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent full_intro_cont
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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  Routine Trial
    TextComponent Stim_Word
      durationEstim = 1.5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $word
    TextComponent Categories
      durationEstim = 1.5
      letterHeight = 0.04
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Trial_Cats
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  Routine Ready_Message
    TextComponent Ready_Text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Rdy_Txt
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Ans_Cue
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please write down your answers.

        When you have finished,

        Press SPACE for more instructions.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Practice_Intro
  Routine Practice_Intro_2
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = Trial1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'Miles'), ('category', 'Distances'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Inches'), ('category', 'Distances'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Aluminum'), ('category', 'Metals'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Iron'), ('category', 'Metals'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Aunt'), ('category', 'Relatives'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Father'), ('category', 'Relatives'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Daughter'), ('category', 'Relatives'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Father'), ('category', 'Relatives'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Inches'), ('category', 'Distances'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Daughter'), ('category', 'Relatives'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Miles'), ('category', 'Distances'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Aluminum'), ('category', 'Metals'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Iron'), ('category', 'Metals'), ('Trial_Cats', 'Distances  Metals  Relatives')]),
      OrderedDict([('word', 'Aunt'), ('category', 'Relatives'), ('Trial_Cats', 'Distances  Metals  Relatives')])]
    Routine Trial
  LoopTerminator Practice
  Routine Ans_Cue
  Routine Intro_to_Full_Task
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = Choose_Trial.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Trial_File', 'Trial2.xlsx'), ('Rdy_Txt', 'Please write down your answers.\n\nWhen you are ready for the next trial\n\nPress SPACE to begin.')]),
      OrderedDict([('Trial_File', 'Trial3.xlsx'), ('Rdy_Txt', 'Please write down your answers.\n\nWhen you are ready for the next trial\n\nPress SPACE to begin.')]),
      OrderedDict([('Trial_File', 'Trial4.xlsx'), ('Rdy_Txt', 'Please write down your answers.\n\nWhen you are ready for the next trial\n\nPress SPACE to begin.')]),
      OrderedDict([('Trial_File', 'Trial5.xlsx'), ('Rdy_Txt', 'Please write down your answers.\n\nWhen you are ready for the next trial\n\nPress SPACE to begin.')]),
      OrderedDict([('Trial_File', 'Trial6.xlsx'), ('Rdy_Txt', 'Please write down your answers.\n\nWhen you are ready for the next trial\n\nPress SPACE to begin.')]),
      OrderedDict([('Trial_File', 'Trial7.xlsx'), ('Rdy_Txt', 'Please write down your answers.\n\nGood work, you have finished the task!\n\nPress SPACE to continue.')])]
    LoopInitiator words loopType="TrialHandler"
      conditionsFile = $Trial_File
      loopType = sequential
      nReps = 1
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      Routine Trial
    LoopTerminator words
    Routine Ready_Message
  LoopTerminator Trials
